# Generated by Configurator on Wed Nov 29 12:35:59 PST 2017

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,TIScope,NikonTI,TIScope
Device,TIEpiShutter,NikonTI,TIEpiShutter
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,IntensiLightShutter,Nikon,IntensiLightShutter
Device,Camera-1,PVCAM,Camera-1

# Pre-init settings for devices
Property,IntensiLightShutter,Port,COM1

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1

# Hub (parent) references
Parent,TIEpiShutter,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0

# Roles
Property,Core,Camera,Camera-1
Property,Core,Shutter,TIEpiShutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,4,5-Plan Apo 100x NA 1.40 Oil
Label,TINosePiece,3,4-S Plan Fluor 40x NA 0.60 Dry
Label,TINosePiece,2,3-S Plan Fluor 20x NA 0.45 Dry
Label,TINosePiece,1,2-Plan Fluor 10x NA 0.30 Dry
Label,TINosePiece,0,1-Plan Apo 20x NA 0.75 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-DIC
Label,TIFilterBlock1,4,5-Cy5 H
Label,TIFilterBlock1,3,4-TxRhq
Label,TIFilterBlock1,2,3-FITC
Label,TIFilterBlock1,1,2-DAPI
Label,TIFilterBlock1,0,1-TRITC
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

