# Generated by Configurator on Tue Aug 28 10:51:18 PDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,TIScope,NikonTI,TIScope
Device,TIDiaShutter,NikonTI,TIDiaShutter
Device,TINosePiece,NikonTI,TINosePiece
Device,TICondenserCassette,NikonTI,TICondenserCassette
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,Camera-1,PVCAM,Camera-1

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIDiaShutter,TIScope
Parent,TINosePiece,TIScope
Parent,TICondenserCassette,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0

# Roles
Property,Core,Camera,Camera-1
Property,Core,Shutter,TIDiaShutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Plan Fluor 100x NA 1.30 Oil
Label,TINosePiece,3,4-Plan Fluor 40x NA 0.75 Dry
Label,TINosePiece,2,3-(Achromat) 40x NA 0.55 Dry
Label,TINosePiece,1,2-S Plan Fluor 20x NA 0.45 Dry
Label,TINosePiece,0,1-Plan Fluor 10x NA 0.30 Dry
# TICondenserCassette
Label,TICondenserCassette,4,5------
Label,TICondenserCassette,3,4-Ph3
Label,TICondenserCassette,2,3-Ph2
Label,TICondenserCassette,1,2-Ph1
Label,TICondenserCassette,0,1-A
# TIFilterBlock1
Label,TIFilterBlock1,5,6-AT-AQ
Label,TIFilterBlock1,4,5-Blue
Label,TIFilterBlock1,3,4-TxRed
Label,TIFilterBlock1,2,3-GFPHQ
Label,TIFilterBlock1,1,2-DAPI
Label,TIFilterBlock1,0,1-Cy5
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

