# Generated by Configurator on Tue Aug 28 10:48:32 PDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,TIScope,NikonTI,TIScope
Device,TIEpiShutter,NikonTI,TIEpiShutter
Device,TINosePiece,NikonTI,TINosePiece
Device,TICondenserCassette,NikonTI,TICondenserCassette
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,Camera-1,PVCAM,Camera-1
Device,TIAuxShutter,NikonTI,TIAuxShutter


# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIEpiShutter,TIScope
Parent,TINosePiece,TIScope
Parent,TICondenserCassette,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope
Parent,TIAuxShutter,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0

# Roles
Property,Core,Camera,Camera-1
Property,Core,Shutter,TIEpiShutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Plan Fluor 100x NA 1.30 Oil
Label,TINosePiece,3,4-Plan Fluor 40x NA 0.75 Dry
Label,TINosePiece,2,3-(Achromat) 40x NA 0.55 Dry
Label,TINosePiece,1,2-S Plan Fluor 20x NA 0.45 Dry
Label,TINosePiece,0,1-Plan Fluor 10x NA 0.30 Dry
# TICondenserCassette
Label,TICondenserCassette,4,5------
Label,TICondenserCassette,3,4-Ph3
Label,TICondenserCassette,2,3-Ph2
Label,TICondenserCassette,1,2-Ph1
Label,TICondenserCassette,0,1-A
# TIFilterBlock1
Label,TIFilterBlock1,5,AT-AQ
Label,TIFilterBlock1,4,Blue
Label,TIFilterBlock1,3,TxRed
Label,TIFilterBlock1,2,GFPHQ
Label,TIFilterBlock1,1,DAPI
Label,TIFilterBlock1,0,Cy5
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: Channel
ConfigGroup,Channel,Bf,TIFilterBlock1,Label,GFPHQ
ConfigGroup,Channel,Bf,TIDiaShutter,State,1
ConfigGroup,Channel,Bf,Core,AutoShutter,0
ConfigGroup,Channel,Bf,TIEpiShutter,State,0
ConfigGroup,Channel,Bf,TIDiaLamp,State,1
ConfigGroup,Channel,Bf,TIDiaLamp,Intensity,4

ConfigGroup,Channel,Cy5,TiFilterBlock1,Label,Cy5
ConfigGroup,Channel,Cy5,TIDiaShutter,State,0
ConfigGroup,Channel,Cy5,TIEpiShutter,State,1
ConfigGroup,Channel,Cy5,Core,AutoShutter,0
ConfigGroup,Channel,Cy5,TIDiaLamp,State,0

ConfigGroup,Channel,DAPI,TiFilterBlock1,Label,DAPI
ConfigGroup,Channel,DAPI,TIDiaShutter,State,0
ConfigGroup,Channel,DAPI,TIEpiShutter,State,1
ConfigGroup,Channel,DAPI,Core,AutoShutter,0
ConfigGroup,Channel,DAPI,TIDiaLamp,State,0

ConfigGroup,Channel,GFPHQ,TiFilterBlock1,Label,GFPHQ
ConfigGroup,Channel,GFPHQ,TIDiaShutter,State,0
ConfigGroup,Channel,GFPHQ,TIEpiShutter,State,1
ConfigGroup,Channel,GFPHQ,Core,AutoShutter,0
ConfigGroup,Channel,GFPHQ,TIDiaLamp,State,0

ConfigGroup,Channel,TxRed,TiFilterBlock1,Label,TxRed
ConfigGroup,Channel,TxRed,TIDiaShutter,State,0
ConfigGroup,Channel,TxRed,TIEpiShutter,State,1
ConfigGroup,Channel,TxRed,Core,AutoShutter,0
ConfigGroup,Channel,TxRed,TIDiaLamp,State,0

ConfigGroup,Channel,Blue,TiFilterBlock1,Label,Blue
ConfigGroup,Channel,Blue,TIDiaShutter,State,0
ConfigGroup,Channel,Blue,TIEpiShutter,State,1
ConfigGroup,Channel,Blue,Core,AutoShutter,0
ConfigGroup,Channel,Blue,TIDiaLamp,State,0

ConfigGroup,Channel,AT-AQ,TiFilterBlock1,Label,AT-AQ
ConfigGroup,Channel,AT-AQ,TIDiaShutter,State,0
ConfigGroup,Channel,AT-AQ,TIEpiShutter,State,1
ConfigGroup,Channel,AT-AQ,Core,AutoShutter,0
ConfigGroup,Channel,AT-AQ,TIDiaLamp,State,0

# Group: System
ConfigGroup,System,10x,Objective,Label,1-Plan Fluor 10x NA 0.30 Dry

ConfigGroup,System,20x,Objective,Label,2-S Plan Fluor 20x NA 0.45 Dry

ConfigGroup,System,40x,Objective,Label,,4-Plan Fluor 40x NA 0.75 Dry

# PixelSize settings
# Resolution preset: Res20x
ConfigPixelSize,Res20x,Objective,Label,2-S Plan Fluor 20x NA 0.45 Dry
PixelSize_um,Res20x,0.3225

# Resolution preset: Res40x
ConfigPixelSize,Res40x,Objective,Label,4-Plan Fluor 40x NA 0.75 Dry
PixelSize_um,Res40x,0.16125

# Resolution preset: Res10x
ConfigPixelSize,Res10x,Objective,Label,1-Plan Fluor 10x NA 0.30 Dry
PixelSize_um,Res10x,0.645
