# Generated by Configurator on Wed Feb 08 11:07:34 PST 2017

# Reset
Property,Core,Initialize,0

# Devices
Device,TIScope,NikonTI,TIScope
Device,TIEpiShutter,NikonTI,TIEpiShutter
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIEpiShutter,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,1

# Roles
Property,Core,Shutter,TIEpiShutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,4,5-Plan Apo 100x NA 1.40 Oil
Label,TINosePiece,3,4-S Plan Fluor 40x NA 0.60 Dry
Label,TINosePiece,2,3-S Plan Fluor 20x NA 0.45 Dry
Label,TINosePiece,1,2-Plan Fluor 10x NA 0.30 Dry
Label,TINosePiece,0,1-Plan Apo 20x NA 0.75 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-DIC
Label,TIFilterBlock1,4,5-Cy5 H
Label,TIFilterBlock1,3,4-TxRhq
Label,TIFilterBlock1,2,3-FITC
Label,TIFilterBlock1,1,2-DAPI
Label,TIFilterBlock1,0,1-TRITC
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

